OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Permite seleccionar el canal
Comment
  Este complemento utiliza el filtro Butterworth
  0.1Hz a 30Hz
Comment
  Visualiza la señal nativa
Comment
  Visualiza la señal filtrada

Generic stream reader => #0
  Filename = C:/Users/esteb/OneDrive/Documentos/Git/Carro_Bluetooth_EOG/OpenVibe_Designer/Pruebas EOG/EOG-signal-1-online-[2025.04.09-20.11.55].ov
#0.Output stream 2 -> Channel Selector "EOG1" => #1
  Channel List = EOG1
  Action = Select
  Channel Matching Method = Smart
Input signal=#1, Input stimulations=#0.Output stream 3 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = P1
#1 -> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 0.5
  High Cut-off Frequency (Hz) = 10
Input signal=#3 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = P2
Data=#3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#1, Stimulations=#0.Output stream 3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
